''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Vineyard Pilot Study (2015)
' Laboratory for Atmospheric Research at Washington State University
' https://bitbucket.org/wsular/2015-vineyard-tower-logger
'
'==========================  SEMI-EDITABLE VALUES  ======================================

'manually update prior to pushing but do not check-in with other than empty string!
Const GIT_TAG = ""

'----- TIMEZONE -----
'This must be set as a constant for use with GPS instruction. It cannot be dynamically 
'assigned based on logger's serial # because of this fact.
Const UTC_OFFSET = -8    'offset from UTC as +/- hours; PST = -8

'----- PROGRAM TIMING -----
Const FAST_INTV = 100     'length of primary scan interval, milliseconds
Const SLOW_INTV = 1       'length of secondary scan interval, seconds
Const SOIL_INTV = 15      'length of slowest sensors (soil probes, gps, shfp)
Const STAT_OUT_5 = 5   	  'stats output interval #1, minutes
Const STAT_OUT_30 = 30		  'stats output interval #2, minutes; use multiple of STAT_INT1
Const SDM_PER = 30         'default SDM clock speed
Const INTEG = 250          'analog measurement integration time (250/_50hz/_60hz)
Const HFP_CAL_INTERVAL = 6*60*60      'frequency of cal. interval, seconds

'----- PROGRAM OPERATION -----
Const SETTINGS_FILE = "CPU:obj2_settings.dat"
Const FAST_BUFFER_SIZE = 600  '= 60sec = 1min buffer
Const SLOW_BUFFER_SIZE = 60  '= 1min buffer
Const SOIL_BUFFER_SIZE = 24  '= 2min buffer
Const DAILY_MEDNUM = 480  '# of values to include in median for daily stats
Const NMBR_WND_SAMPLES = 3000/FAST_INTV  '#pts to compute 3sec mean horizontal wind

'----- BASE SENSORS ANALOG INPUT MAP ------ 
Const HMP_T_DIFF      = 2     'HMP T diff input chan #
Const HMP_RH_DIFF     = 3     'HMP RH diff input chan #
Const NRLITE_DIFF     = 4     'NR-Lite2 diff input chan #
Const LI190_DIFF      = 5     'LI190SB diff input chan #

Const oh34B_WD_SE     = 1     '034B single ended input chan # = D1H
Const oh34B_WD_VX     = 1     '034B voltage excitation chan #
Const oh34B_WS_PULSE  = 1     '034B pulse input chan #
Const TE525_PULSE     = 2     'TE525 rain gage pulse input chan #

'----- BASE SENSORS DIGITAL INPUT MAP -----
Const EC100_SDM_ADDR  = 1     'SDM address for EC100/EC150/CSAT3A
Const GPS_COM_ADDR    = Com4  'GPS serial input port #
Const SDI_COM_ADDR = 5   'serial port reserved for SDI communications = Com3
Const DEC_5TM_ID5_SDI_ADDR = 5   'first 5TM sensor address
Const DEC_5TM_ID6_SDI_ADDR = 6   ' ...
Const DEC_5TM_ID7_SDI_ADDR = 7   ' ...
Const DEC_5TM_ID8_SDI_ADDR = 8   ' ...
Const DEC_5TM_ID9_SDI_ADDR = 9   ' fifth 5TM sensor address

'------ OPTIONAL SENSORS ANALOG INPUT MAP -----
Const HFP_1_SGNL_DIFF = 6    'heat flux plate sensor signal diff input chan #
Const HFP_2_SGNL_DIFF = 7    '   plate #2
Const HFP_1_HEAT_SE   = 27   'hfp heater signal SE input chan # = D14H 
Const HFP_2_HEAT_SE   = 28   '   plate #2                       = D14L
Const HFP_HEAT_SW12   = 1    'hfp heater power source SW-12V # (1 or 2)
Const LGR_N2O_DIFF    = 8    'Los Gatos N2O diff input chan #
Const LGR_CO_DIFF     = 9    'Los Gatos CO diff input chan #
Const LGR_H2O_DIFF    = 10   'Los Gatos H2O diff input chan #
Const PIC_CO2_DIFF    = 11   'Picarro CO2 diff input chan #
Const PIC_CH4_DIFF    = 12   'Picarro CH4 diff input chan #
Const PIC_H2O_DIFF    = 13   'Picarro H2O diff. input chan #
' 14 is designated as SE27/28 for the heat flux plate

'----- OPTIONAL SENSORS DIGITAL INPUT MAP ------
Const DEC_NDVI_UP_SDI_ADDR = 0   '2nd gen sensors from decagon (UI team)
Const DEC_NDVI_DN_SDI_ADDR = 1
Const DEC_PRI_UP_SDI_ADDR = 2
Const DEC_PRI_DN_SDI_ADDR = 3

ConstTable
  Const SHFP_ENABLED = False
  Const NDVIPRI_ENABLED = False
  Const LGR_N2O_ENABLED = False
  Const PIC_CH4_ENABLED = False
EndConstTable

'----- FIXED CALIBRATION VALUES ------
Const HMP_T_MULT       = (60 - -80)/1000    '-80 to +60 *C over 1V = 0.14
Const HMP_T_OFFSET     = -80
Const HMP_RH_MULT      = (100 - 0)/1000     '0 - 100% over 1V
Const HMP_RH_OFFSET    = 0
Const oh34B_WD_MULT    = 720                '720/0 as specified in CSI manual:
Const oh34B_WD_OFFSET  = 0                  ' Met One 034B Windset rev3/12, pg 6
Const oh34B_WS_MULT    = 0.7989             '0.7989/0.28 as specified in above CSI manual
Const oh34B_WS_OFFSET  = 0.28
'  ** NRLITE_MULT
Const NRLITE_OFFSET    = 0
'  ** LI190_DENS_MULT  
'  ** LI190_TOT_MULT   
Const TE525_MULT       = 0.254 
Const TE525_OFFSET     = 0
' **These values depend on site-specific values; assignment is deferred
'   to program execution time.


'==========================  NO USER-SERVICEABLE PARTS BELOW  ===========================
'-----  PHYSICAL CONSTANTS  -----
Const MU_WPL = 29/18       'Ratio of the molecular weight of dry air to water vapor
Const R = .0083143         'Universal gas constant [kPa m^3/(K mol)]
Const RD = R/29            'Gas constant for dry air [kPa m^3/(K g)]
Const LV = 2440            'Estimate of the latent heat of vaporization [J/g]
Const RV = R/18            'Gas constant for water vapor [kPa m^3/(K g)]
Const CP = 1004.67         'Estimate of heat capacity of air [J/(kg K)]


'----- PROGRAM OPERATION VARIABLES -----
Public debug_on As Boolean
Dim self As String * 16
Dim filehandle As Long
Dim scan_count As Long                                   'Number scans executed.
Dim just_had_1hz_scan As Boolean                   'Flag used to indicate the SlowSequence has finished its scan.
Dim inbetween_1hz_scan As Boolean = {TRUE}           'Flag used to decimate statistics in main scan.
Dim just_had_soil_scan As Boolean
Dim inbetween_5s_scan As Boolean = {TRUE}
Dim i As Long                                            'Main scan index variable.
Dim ii As Long                                           'Slow sequence scan index variable.
Dim n = {1}
Units n = samples

Dim sensor_shfp As Boolean 'set based on site SN

'----- RETAINED SETTINGS -----
Const NUM_SETTINGS = {29} 'set to length of settings array
Const WRITEFILE = 0
Const READFILE = 1

Dim settings(NUM_SETTINGS) 'values retained via file written to datalogger CPU
Alias settings(1)  = sonic_azimuth
Alias settings(2)  = NRLite2_sens
Alias settings(3)  = LI190SB_sens
Alias settings(4)  = cup_ws_enabled
Alias settings(5)  = vane_wd_enabled
Alias settings(6)  = rain_enabled
Alias settings(7)  = soil_5_enabled
Alias settings(8)  = soil_6_enabled
Alias settings(9)  = soil_7_enabled
Alias settings(10) = soil_8_enabled
Alias settings(11) = soil_9_enabled
Alias settings(12) = hfp1_sens
Alias settings(13) = hfp1_R
Alias settings(14) = hfp1_A
Alias settings(15) = hfp2_sens
Alias settings(16) = hfp2_R
Alias settings(17) = hfp2_A
Alias settings(18) = lgr_n2o_mult
Alias settings(19) = lgr_n2o_offset
Alias settings(20) = lgr_co_mult
Alias settings(21) = lgr_co_offset
Alias settings(22) = lgr_h2o_mult
Alias settings(23) = lgr_h2o_offset
Alias settings(24) = pic_co2_mult
Alias settings(25) = pic_co2_offset
Alias settings(26) = pic_ch4_mult
Alias settings(27) = pic_ch4_offset
Alias settings(28) = pic_h2o_mult
Alias settings(29) = pic_h2o_offset

Units hfp1_sens = uV/W/m^2
Units hfp1_R = ohms
Units hfp1_A = m^2
Units hfp2_sens = uV/W/m^2
Units hfp2_R = ohms
Units hfp2_A = m^2
'ignore mults & offsets
Units sonic_azimuth = degEofTN
Units NRLite2_sens = uV/W/m^2
Units LI190SB_sens = uA/mmol/s/m^2

Public choice(NUM_SETTINGS)
Alias choice(1)  = set_sonic_azimuth
Alias choice(2)  = set_NRLite2_sens
Alias choice(3)  = set_LI190SB_sens
Alias choice(4)  = set_cup_ws_enabled
Alias choice(5)  = set_vane_wd_enabled
Alias choice(6)  = set_rain_enabled
Alias choice(7)  = set_soil_5_enabled
Alias choice(8)  = set_soil_6_enabled
Alias choice(9)  = set_soil_7_enabled
Alias choice(10) = set_soil_8_enabled
Alias choice(11) = set_soil_9_enabled
Alias choice(12) = set_hfp1_sens
Alias choice(13) = set_hfp1_R
Alias choice(14) = set_hfp1_A
Alias choice(15) = set_hfp2_sens
Alias choice(16) = set_hfp2_R
Alias choice(17) = set_hfp2_A
Alias choice(18) = set_lgr_n2o_mult
Alias choice(19) = set_lgr_n2o_offset
Alias choice(20) = set_lgr_co_mult
Alias choice(21) = set_lgr_co_offset
Alias choice(22) = set_lgr_h2o_mult
Alias choice(23) = set_lgr_h2o_offset
Alias choice(24) = set_pic_co2_mult
Alias choice(25) = set_pic_co2_offset
Alias choice(26) = set_pic_ch4_mult
Alias choice(27) = set_pic_ch4_offset
Alias choice(28) = set_pic_h2o_mult
Alias choice(29) = set_pic_h2o_offset

'----- SELF-MONITORING -----
Dim SkippedScans(3)
Alias SkippedScans(1) = skipped_10hz_scans
Alias SkippedScans(2) = skipped_1hz_scans
Alias SkippedScans(3) = skipped_5s_scans
Units SkippedScans = scans

Dim watchdog_errors
Units watchdog_errors = counts


'***********  CR3000  ************
Dim panel_tmpr
Units panel_tmpr = C
Dim batt_volt
Units batt_volt = V


'***********  EC100/EC150/CSAT3A  **********
Const OFFSET = 17          'min # recs req'd to compensate for IRGA/CSAT lags on-the-fly
Const BANDWIDTH = 20            '20 = 20 Hz
Const DELAY_EC150 = INT (4000/FAST_INTV/BANDWIDTH) 'Automatically computed lag of the EC150 data.
Const EC150_REC_BCK = OFFSET-DELAY_EC150 'Number of records back to align EC150 data.

Dim sonic_irga_raw(12)                     'unlagged EC150 irga + CSAT3A sonic data

Dim sonic(5)                            'lagged working CSAT3A data
Alias sonic(1) = Ux
Alias sonic(2) = Uy
Alias sonic(3) = Uz
Alias sonic(4) = Ts
Alias sonic(5) = diag_sonic
Units Ux = m/s
Units Uy = m/s
Units Uz = m/s
Units Ts = C
Units diag_sonic = bitmap

Dim irga(9)
Alias irga(1) = CO2
Alias irga(2) = H2O
Alias irga(3) = diag_irga
Alias irga(4) = amb_tmpr
Alias irga(5) = amb_press
Alias irga(6) = CO2_signal
Alias irga(7) = H2O_signal
Alias irga(8) = Tc
Units CO2 = mg/m^3
Units H2O = g/m^3
Units diag_irga = bitmap
Units amb_tmpr = C
Units amb_press = kPa
Units CO2_signal = unity
Units H2O_signal = unity
Units Tc = C

Dim mask As Long
Dim diag_sonic_tmp As Long                 'used to break out the CSAT3A sonic head diagnostic bits.
Dim sonic_disable_f As Boolean             'TRUE if CSAT3A diag warning flag, SDM error or no data
Dim diag_irga_tmp As Long                   'used to break out the EC150 diagnostic bits.
Dim irga_disable_f As Boolean               'TRUE when EC150 sends bad data.

Dim cov_array_sonic(1,4)                   'used to hold input data for cov instructions 
Dim cov_array_cs(3,4)  

Dim etcvar(3)
Alias etcvar(1)  = divisor                  'used to find molar mixing ratio.
Alias etcvar(2)  = rho_d_mean               'Density of dry air used in WPL [kg / m^3].
Alias etcvar(3)  = sigma_wpl                'density of water vapor / density of dry air.

Dim results(19)
Alias results(1)  = Ts_absolute       'sonic temp in Kelvin
Alias results(2)  = CO2_ppm                'CO2 mixing ratio
Alias results(3)  = Xv                'H2O mixing ratio
Alias results(4)  = L                 'Obukohov length
Alias results(5)  = Hs                'Sensible heat flux using sonic temperature.
Alias results(6)  = tau               'Momentum flux.
Alias results(7)  = u_star            'Friction velocity.
Alias results(8)  = sonic_uptime
Alias results(9)  = Fc_wpl         'Carbon dioxide flux (EC150), with WPL
Alias results(10) = LE_wpl         'Latent heat flux (EC150), with WPL
Alias results(11) = Hc             'Sensible heat flux with h2o-corrected sonic temp 
Alias results(12) = irga_uptime
Alias results(13) = rho_a_mean
Alias results(14) = Fc_irga      'Carbon dioxide flux (EC150), without WPL
Alias results(15) = LE_irga      'Latent heat flux (EC150), without WPL
Alias results(16) = CO2_wpl_LE   'Carbon dioxide flux (EC150), WPL latent heat flux.
Alias results(17) = CO2_wpl_H    'Carbon dioxide flux (EC150), WPL sensible heat flux.
Alias results(18) = H2O_wpl_LE   'Latent heat flux (EC150), WPL latent heat flux.
Alias results(19) = H2O_wpl_H    'Latent heat flux (EC150), WPL sensible heat flux.
Units Ts_absolute = Kelvin
Units CO2_ppm = ppm
Units Xv = ppt
Units L = m
Units Hs = W/m^2
Units tau = kg/(m s^2)
Units u_star = m/s
Units sonic_uptime = unity
Units Fc_wpl = mg/(m^2 s)
Units LE_wpl = W/m^2
Units Hc = W/m^2
Units irga_uptime = unity
Units rho_a_mean = kg/m^3
Units Fc_irga = mg/(m^2 s)
Units LE_irga = W/m^2
Units CO2_wpl_LE = mg/(m^2 s)
Units CO2_wpl_H = mg/(m^2 s)
Units H2O_wpl_LE = W/m^2
Units H2O_wpl_H = W/m^2


'**********  HMP-155A temp/RH probe  **********
Dim hmp(4)
Alias hmp(1) = T_hmp                  'HMP temperature
Alias hmp(2) = RH_hmp                 'HMP relative humidity
Alias hmp(3) = e_hmp                  'HMP vapor pressure
Alias hmp(4) = e_sat_hmp              'HMP saturation vapor pressure
Units T_hmp = C
Units RH_hmp = percent
Units e_hmp = kPa
Units e_sat_hmp = kPa

Dim hmp_stats(3)
Alias hmp_stats(1) = H2O_hmp_mean
Alias hmp_stats(2) = RH_hmp_Avg 
Units H2O_hmp_mean = g/m^3
Units RH_hmp_Avg = %


'**********  NR-Lite2  **********
Dim nrlite_mult

Dim nrlite(2)
Alias nrlite(1) = Rn
Alias nrlite(2) = Rn_meas
Units Rn = W/m^2
Units Rn_meas = W/m^2

Dim hor_wind
Dim hor_wind_raw


'**********  LI190SB quantum PAR sensor  ***********
Dim li190_dens_mult
Dim li190_tot_mult

Dim par(3)
Alias par(1) = PAR_mV
Alias par(2) = PAR_flxdens
Alias par(3) = PAR_totflx
Units PAR_mV = mV
Units PAR_flxdens = umol/s/m^2
Units PAR_totflx = mmol/m^2


'***********  034B wind vane  **********
Dim oh34B(2)
Alias oh34B(1) = WS_ms
Alias oh34B(2) = WindDir
Units WS_ms = m/s
Units WindDir = degrees


'**********  TE525 rain gage  **********
Dim Rain_mm
Units Rain_mm=mm


'**********  GPS16X-HVS  **********
Dim nmea_sentence(2) As String * 90
Dim gps_data(15)
Alias gps_data(1) = latitude_a              'Degrees latitude (+ = East; - = West)
Alias gps_data(2) = latitude_b              'Minutes latitude
Alias gps_data(3) = longitude_a             'Degress longitude (+ = East; - = West)
Alias gps_data(4) = longitude_b             'Minutes longitude
Alias gps_data(5) = speed                   'Speed
Alias gps_data(6) = course                  'Course over ground
Alias gps_data(7) = magnetic_variation      'Magnetic variation from true north (+ = East; - = West)
Alias gps_data(8) = fix_quality             'GPS fix quality: 0 = invalid, 1 = GPS, 2 = 'differential GPS, 6 = estimated
Alias gps_data(9) = nmbr_satellites         'Number of satellites used for fix
Alias gps_data(10) = altitude               'Antenna altitude
Alias gps_data(11) = pps                    'Elapsed ms since last pulse per second (PPS) from GPS
Alias gps_data(12) = dt_since_gprmc         'Time since last GPRMC string, normally less than '1 second
Alias gps_data(13) = gps_ready              'Counts from 0 to 10, 10 = ready
Alias gps_data(14) = max_clock_change       'Maximum value the clock was changed
Alias gps_data(15) = nmbr_clock_change      'Number of times the clock was changed
Units latitude_a = degreesN
Units latitude_b = minutesN
Units longitude_a = degreesE
Units longitude_b = minutesE
Units speed = m/s
Units course = degreesEofN
Units magnetic_variation = degreesEofN
Units fix_quality = unitless
Units nmbr_satellites = unitless
Units altitude = m
Units pps = ms
Units dt_since_gprmc = s
Units gps_ready = unitless
Units max_clock_change = ms
Units nmbr_clock_change = occurrences


'**********  Decagon 5TM soil moisture/temp **********
' Required so soil table can record NAN if probes are not used.
Dim fiveTM(15)
Alias fiveTM(1)  = soil_5TM_ID5_E
Alias fiveTM(2)  = soil_5TM_ID5_T
Alias fiveTM(3)  = soil_5TM_ID5_VWC
Alias fiveTM(4)  = soil_5TM_ID6_E
Alias fiveTM(5)  = soil_5TM_ID6_T
Alias fiveTM(6)  = soil_5TM_ID6_VWC
Alias fiveTM(7)  = soil_5TM_ID7_E
Alias fiveTM(8)  = soil_5TM_ID7_T
Alias fiveTM(9)  = soil_5TM_ID7_VWC
Alias fiveTM(10) = soil_5TM_ID8_E
Alias fiveTM(11) = soil_5TM_ID8_T
Alias fiveTM(12) = soil_5TM_ID8_VWC
Alias fiveTM(13) = soil_5TM_ID9_E
Alias fiveTM(14) = soil_5TM_ID9_T
Alias fiveTM(15) = soil_5TM_ID9_VWC
Units soil_5TM_ID5_E   = dimless
Units soil_5TM_ID5_T   = C
Units soil_5TM_ID5_VWC = v/v
Units soil_5TM_ID6_E   = dimless
Units soil_5TM_ID6_T   = C
Units soil_5TM_ID6_VWC = v/v
Units soil_5TM_ID7_E   = dimless
Units soil_5TM_ID7_T   = C
Units soil_5TM_ID7_VWC = v/v
Units soil_5TM_ID8_E   = dimless
Units soil_5TM_ID8_T   = C
Units soil_5TM_ID8_VWC = v/v
Units soil_5TM_ID9_E   = dimless
Units soil_5TM_ID9_T   = C
Units soil_5TM_ID9_VWC = v/v


'**********  HFP01SC heat flux plate  **********
Dim hfp(4)
Alias hfp(1) = soil_hfp1_heat_flux
Alias hfp(2) = soil_hfp2_heat_flux
Alias hfp(3) = soil_hfp1_sensitivity
Alias hfp(4) = soil_hfp2_sensitivity
Units soil_hfp1_heat_flux = W/m^2
Units soil_hfp2_heat_flux = W/m^2
Units soil_hfp1_sensitivity = W/m^2/mV
Units soil_hfp2_sensitivity = W/m^2/mV
Dim hfp_isCalibrating As Boolean = {False}
  
#If (SHFP_ENABLED) Then  
  Const HFP_CAL_RUNAVG = 20/SOIL_INTV   'use 20 sec running averages
  Const HFP_CAL_T_START = 120            'starting time into cal. interval, seconds
  Const HFP_CAL_T_HEATON = HFP_CAL_T_START + 20
  Const HFP_CAL_T_END = HFP_CAL_T_START + 190
  Const HFP_CAL_T_HEATOFF = HFP_CAL_T_START + 200
  Const HFP_CAL_T_FINISH = HFP_CAL_T_START + 380
  Const HFP_R_CUR = 10                  'current sensing resistor = 10 Ohm, 1%, 1/4 W
  Dim hfp1_selfcal_mult
  Dim hfp2_selfcal_mult
  
  Dim hfp_sw12_isOn As Boolean
  Dim hfp_selfcal(8,2)
  Alias hfp_selfcal(1,1) = hfp1_mVs          'inst. value of soil heat flux
  Alias hfp_selfcal(2,1) = hfp1_mVs_runavg   'run avg of soil heat flux
  Alias hfp_selfcal(3,1) = hfp1_mVs_t0       'soil heat flux @ start of cal cycle
  Alias hfp_selfcal(4,1) = hfp1_mVs_th       'soil heat flux after heating in cal cycle
  Alias hfp_selfcal(5,1) = hfp1_mVs_te       'soil heat flux symmetrically after cal cycle
  Alias hfp_selfcal(6,1) = hfp1_Vh           'inst. ref voltage
  Alias hfp_selfcal(7,1) = hfp1_Vh_runavg    'run avg of ref voltage
  Alias hfp_selfcal(8,1) = hfp1_Vh_th        'ref voltage after heating in cal cycle
  Alias hfp_selfcal(1,2) = hfp2_mVs          'inst. value of soil heat flux
  Alias hfp_selfcal(2,2) = hfp2_mVs_runavg   'run avg of soil heat flux
  Alias hfp_selfcal(3,2) = hfp2_mVs_t0       'soil heat flux @ start of cal cycle
  Alias hfp_selfcal(4,2) = hfp2_mVs_th       'soil heat flux after heating in cal cycle
  Alias hfp_selfcal(5,2) = hfp2_mVs_te       'soil heat flux symmetrically after cal cycle
  Alias hfp_selfcal(6,2) = hfp2_Vh           'inst. ref voltage
  Alias hfp_selfcal(7,2) = hfp2_Vh_runavg    'run avg of ref voltage
  Alias hfp_selfcal(8,2) = hfp2_Vh_th        'ref voltage after heating in cal cycle
#EndIf

'**********  Los Gatos N2O/CO analyzer  **********
Dim lgrn2oco(3)                          'data variables
Alias lgrn2oco(1) = lgr_n2o
Alias lgrn2oco(2) = lgr_co
Alias lgrn2oco(3) = lgr_h2o
Units lgr_n2o = scale-dependent
Units lgr_co = scale-dependent
Units lgr_h2o = scale-dependent

'**********  Picarro CO2/CH4 analyzer  **********
Dim picco2ch4(3) As Float
Alias picco2ch4(1) = pic_co2
Alias picco2ch4(2) = pic_ch4
Alias picco2ch4(3) = pic_h2o
Units pic_co2 = scale-dependent
Units pic_ch4 = scale-dependent
Units pic_h2o = scale-dependent

'**********  Decagon 2nd gen. sensors (UI) **********
Dim decagon(8) As Float
Alias decagon(1) = dec_ndvi_up1
Alias decagon(2) = dec_ndvi_up2
Alias decagon(3) = dec_ndvi_dn1
Alias decagon(4) = dec_ndvi_dn2
Alias decagon(5) = dec_pri_up1
Alias decagon(6) = dec_pri_up2
Alias decagon(7) = dec_pri_dn1
Alias decagon(8) = dec_pri_dn2
Units decagon = unknown


'**********  Intermediate variables  **********
Dim dly_data_out(12)                       'used to temporarily store the lagged record.

Dim work_stats_out(35)
'sonic processing
Alias work_stats_out(1) = Ts_Std          'results of covariance instructions, 10 qntys
Alias work_stats_out(2) = Ts_Ux_cov
Alias work_stats_out(3) = Ts_Uy_cov
Alias work_stats_out(4) = Ts_Uz_cov
Alias work_stats_out(5) = Ux_Std
Alias work_stats_out(6) = Ux_Uy_cov
Alias work_stats_out(7) = Ux_Uz_cov
Alias work_stats_out(8) = Uy_Std
Alias work_stats_out(9) = Uy_Uz_cov
Alias work_stats_out(10) = Uz_Std
Alias work_stats_out(11) = wnd_spd          'results of windvector instruction, 4 qntys
Alias work_stats_out(12) = rslt_wnd_spd
Alias work_stats_out(13) = rslt_wnd_dir
Alias work_stats_out(14) = std_wnd_dir
Alias work_stats_out(15) = sonic_samples     '1 @ totalize
'irga processing
Alias work_stats_out(16) = CO2_mg_m3_Std 			   'results of 3 covariances, 12 #s
Alias work_stats_out(17) = CO2_Ux_cov
Alias work_stats_out(18) = CO2_Uy_cov
Alias work_stats_out(19) = CO2_Uz_cov
Alias work_stats_out(20) = H2O_g_m3_Std
Alias work_stats_out(21) = H2O_Ux_cov
Alias work_stats_out(22) = H2O_Uy_cov
Alias work_stats_out(23) = H2O_Uz_cov
Alias work_stats_out(24) = Tc_stdev
Alias work_stats_out(25) = Tc_Ux_cov
Alias work_stats_out(26) = Tc_Uy_cov
Alias work_stats_out(27) = Tc_Uz_cov
Alias work_stats_out(28) = CO2_mg_m3_Avg    'four averages
Alias work_stats_out(29) = H2O_g_m3_Avg
Alias work_stats_out(30) = amb_press_Avg
Alias work_stats_out(31) = Tc_Avg
Alias work_stats_out(32) = irga_samples     '1 @ totalize
'hmp processing
Alias work_stats_out(33) = e_hmp_Avg         'two averages
Alias work_stats_out(34) = e_sat_hmp_Avg 
Alias work_stats_out(35) = samples_possible
Units Ts_Std = C
Units Ts_Ux_cov = C m/s
Units Ts_Uy_cov = C m/s
Units Ts_Uz_cov = C m/s
Units Ux_Std = m/s
Units Ux_Uy_cov = (m/s)^2
Units Ux_Uz_cov = (m/s)^2
Units Uy_Std = m/s
Units Uy_Uz_cov = (m/s)^2
Units Uz_Std = m/s
Units wnd_spd = m/s
Units rslt_wnd_spd = m/s
Units rslt_wnd_dir = degrees
Units std_wnd_dir = degrees
Units sonic_samples = samples
Units CO2_mg_m3_Std = mg/m^3
Units CO2_Ux_cov = mg/(m^2 s)
Units CO2_Uy_cov = mg/(m^2 s)
Units CO2_Uz_cov = mg/(m^2 s)
Units H2O_g_m3_Std = g/m^3
Units H2O_Ux_cov = g/(m^2 s)
Units H2O_Uy_cov = g/(m^2 s)
Units H2O_Uz_cov = g/(m^2 s)
Units Tc_stdev = C
Units Tc_Ux_cov = C m/s
Units Tc_Uy_cov = C m/s
Units Tc_Uz_cov = C m/s
Units CO2_mg_m3_Avg = mg/m^3
Units H2O_g_m3_Avg = g/m^3
Units amb_press_Avg = kPa
Units Tc_Avg = C
Units irga_samples = samples
Units e_hmp_Avg = kPa
Units e_sat_hmp_Avg = kPa
Units samples_possible = samples

Dim out_daily(17)
Alias out_daily(10) = min_battery
Alias out_daily(12) = max_battery
Alias out_daily(14) = min_tmpr
Alias out_daily(16) = max_tmpr


'============================  REMOTE MONITORING  ============================
DataTable(debug,True,2)
  Sample(2,hmp(1),IEEE4)
  Sample(2,nrlite(1),IEEE4)
  Sample(2,par(1),IEEE4)
  Sample(2,oh34B(1),IEEE4)
  Sample(1,Rain_mm,IEEE4)
  Sample(15,gps_data(1),IEEE4)
  Sample(2,fiveTM(1),IEEE4)
  Sample(2,fiveTM(4),IEEE4)
  Sample(2,fiveTM(7),IEEE4)
  Sample(2,fiveTM(10),IEEE4)
  Sample(2,fiveTM(13),IEEE4)
  Sample(4,hfp(1),IEEE4)
  Sample(8,decagon(1),IEEE4)
  Sample(1,smtp_response,String)
  Sample(1,scadabr_success,Boolean)
  Sample(1,scadabr_resp,String)
EndTable


'===========================  PROCESSING DATA TABLES  ===================================
DataTable(work_delay_ec100,TRUE,OFFSET) 'handles lagging CSAT+IRGA data
  TableHide
  Sample(12,sonic_irga_raw(1),IEEE4)
EndTable

DataTable(work_5min,TRUE,1)
  TableHide
  DataInterval(0,STAT_OUT_5,Min,1)
  Covariance(4,cov_array_sonic(1,1),IEEE4,sonic_disable_f,10)
  WindVector(1,-1*Uy,Ux,IEEE4,sonic_disable_f,0,1,2)
  Totalize(1,n,IEEE4,sonic_disable_f)
    FieldNames("sonic_total")
  Covariance(4,cov_array_cs(1,1),IEEE4,irga_disable_f,4)
  Covariance(4,cov_array_cs(2,1),IEEE4,irga_disable_f,4)
  Covariance(4,cov_array_cs(3,1),IEEE4,irga_disable_f,4)
  Average(1,CO2,IEEE4,irga_disable_f)
  Average(1,H2O,IEEE4,irga_disable_f)
  Average(1,amb_press,IEEE4,irga_disable_f)
  Average(1,Tc,IEEE4,irga_disable_f)
  Totalize(1,n,IEEE4,irga_disable_f)
    FieldNames("irga_total")
  Average(1,e_hmp,IEEE4,(inbetween_1hz_scan OR e_hmp=NAN))
  Average(1,e_sat_hmp,IEEE4,(inbetween_1hz_scan OR e_sat_hmp=NAN))
  Totalize(1,n,IEEE4,False)
EndTable

DataTable(work_30min,TRUE,1)
  TableHide
  DataInterval(0,STAT_OUT_30,Min,1)
  Covariance(4,cov_array_sonic(1,1),IEEE4,sonic_disable_f,10)
  WindVector(1,-1*Uy,Ux,IEEE4,sonic_disable_f,0,1,2)
  Totalize(1,n,IEEE4,sonic_disable_f)
    FieldNames("sonic_total")
  Covariance(4,cov_array_cs(1,1),IEEE4,irga_disable_f,4)
  Covariance(4,cov_array_cs(2,1),IEEE4,irga_disable_f,4)
  Covariance(4,cov_array_cs(3,1),IEEE4,irga_disable_f,4)
  Average(1,CO2,IEEE4,irga_disable_f)
  Average(1,H2O,IEEE4,irga_disable_f)
  Average(1,amb_press,IEEE4,irga_disable_f)
  Average(1,Tc,IEEE4,irga_disable_f)
  Totalize(1,n,IEEE4,irga_disable_f)
    FieldNames("irga_total")
  Average(1,e_hmp,IEEE4,(inbetween_1hz_scan OR e_hmp=NAN))
  Average(1,e_sat_hmp,IEEE4,(inbetween_1hz_scan OR e_sat_hmp=NAN))
  Totalize(1,n,IEEE4,False)
EndTable

'===========================  BASE OUTPUT DATA TABLES  ==================================
Const DAYS = 42 '6 weeks

'time series data @ 10hz
DataTable (tsdata,TRUE,600   
  DataInterval (0,FAST_INTV,mSec,100)
  TableFile("CRD:TOA5_" & self & ".tsdata_", 108, 24, 0, 1, hr, 0, 0)
  CardOut(0, DAYS*864000)
  Sample (4,sonic_irga_raw(1),IEEE4)
    FieldNames ("Ux,Uy,Uz,Ts")
  Sample (1,sonic_irga_raw(5),FP2)
    FieldNames ("diag_sonic")
  Sample (5,sonic_irga_raw(6),IEEE4)
    FieldNames ("CO2,H2O,diag_irga,amb_tmpr,amb_press")
  Sample (2,sonic_irga_raw(11),FP2)
    FieldNames ("CO2_signal,H2O_signal")
EndTable

'5min statistics
DataTable (stats5,TRUE,24)
  DataInterval (0,STAT_OUT_5,Min,10)
  CardOut(0, DAYS*288)
  Sample(1,L,IEEE4)                     'monin obukhov length, meters
  Sample(1,u_star,FP2)                  'friction velocity, m/s  
  Sample(1,tau,FP2)                     'momemtum flux, kg/(m s^2)
  Sample(1,Fc_wpl,IEEE4)                'density-corrected (WPL) CO2 flux, mg/m3
  Sample(1,LE_wpl,FP2)                  'density-corrected (WPL) latent heat flux, W/m2
  Sample(1,Hc,FP2)                      'density-corrected sensible heat flux, W/m2
  Average(1,Ts,FP2,sonic_disable_f)     'mean sonic temperature, degC
  Sample(1,Ts_Std,FP2)                  'stdev of sonic temp, degC
  Sample(1,Tc_Avg,FP2)                 'mean of corrected sonic temp, degC
  Sample(1,Uz_Std,FP2)                  'stdev of vertical wind, m/s
  Sample(1,wnd_spd,FP2)                 'mean scalar wind speed, m/s
  Sample(1,rslt_wnd_spd,FP2)            'vector mean wind speed, m/s
  Sample(1,rslt_wnd_dir,FP2)         'mean wind direction rel2 north, degrees
  Sample(1,std_wnd_dir,FP2)             'scalar stdev of wind direction, degrees
  Sample(1,sonic_uptime,FP2)
  Average(1,CO2_ppm,FP2,irga_disable_f)
  Sample (1,CO2_mg_m3_Avg,FP2)                'mean of CO2 conc, mg/m3
  Sample (1,CO2_mg_m3_Std,FP2)               'stdev of CO2 conc, mg/m3
  Average(1,CO2_signal,FP2,irga_disable_f)
  Average(1,(Xv / MU_WPL),FP2,irga_disable_f)
    FieldNames("H2O_g_kg_Avg")
    Units H2O_g_kg_Avg = g/kg
  Sample (1,H2O_g_m3_Avg,FP2)                'mean of H2O conc, g/m3
  Sample (1,H2O_g_m3_Std,FP2)               'stdev of H2O conc, g/m3
  Average(1,H2O_signal,FP2,irga_disable_f)
  Average(1,amb_tmpr,IEEE4,irga_disable_f)
  Sample (1,amb_press_Avg,IEEE4)        'mean of ambient pressure, kPa
  Sample(1,irga_uptime,FP2)
  Average(1,T_hmp,IEEE4,(inbetween_1hz_scan OR T_hmp=NAN))
  Sample (1,RH_hmp_Avg,FP2)             'mean HMP relative humidity, %
  Sample (1,e_hmp_Avg,FP2)
  Sample (1,e_sat_hmp_Avg,FP2)
  Average(1,Rn,FP2,(inbetween_1hz_scan OR Rn=NAN))
  Average(1,Rn_meas,FP2,inbetween_1hz_scan OR Rn_meas=NAN))
  Totalize(1,PAR_totflx,FP2,(inbetween_1hz_scan OR PAR_totflx=NAN))
  Average(1,PAR_flxdens,FP2,(inbetween_1hz_scan OR PAR_flxdens=NAN))
  WindVector(1,WS_ms,WindDir,FP2,(WS_ms=NAN OR WindDir=NAN),0,0,2)
    FieldNames("Met1_wnd_spd,Met1_rslt_wnd_spd,Met1_rslt_wnd_dir,Met1_std_wnd_dir")
    Units Met1_wnd_spd = m/s
    Units Met1_rslt_wnd_spd = m/s
    Units Met1_rslt_wnd_dir = degrees
    Units Met1_std_wnd_dir = degrees
  Totalize(1,Rain_mm,FP2,Rain_mm=NAN) '10hz loop
  Average(1,soil_5TM_ID5_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID5_E=NAN))
  Average(1,soil_5TM_ID5_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID5_T=NAN))
  Average(1,soil_5TM_ID5_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID5_VWC=NAN))
  Average(1,soil_5TM_ID6_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID6_E=NAN))
  Average(1,soil_5TM_ID6_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID6_T=NAN))
  Average(1,soil_5TM_ID6_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID6_VWC=NAN))
  Average(1,soil_5TM_ID7_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID7_E=NAN))
  Average(1,soil_5TM_ID7_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID7_T=NAN))
  Average(1,soil_5TM_ID7_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID7_VWC=NAN))
  Average(1,soil_5TM_ID8_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID8_E=NAN))
  Average(1,soil_5TM_ID8_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID8_T=NAN))
  Average(1,soil_5TM_ID8_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID8_VWC=NAN))
  Average(1,soil_5TM_ID9_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID9_E=NAN))
  Average(1,soil_5TM_ID9_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID9_T=NAN))
  Average(1,soil_5TM_ID9_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID9_VWC=NAN))
  Average(1,soil_hfp1_heat_flux,  IEEE4,(inbetween_5s_scan OR hfp_isCalibrating OR soil_hfp1_heat_flux=NAN))
  Sample (1,soil_hfp1_sensitivity,IEEE4)
  Average(1,soil_hfp2_heat_flux,  IEEE4,(inbetween_5s_scan OR hfp_isCalibrating OR soil_hfp2_heat_flux=NAN))
  Sample (1,soil_hfp2_sensitivity,IEEE4)
  Average(1,panel_tmpr,FP2,(inbetween_1hz_scan OR panel_tmpr=NAN))
  Average(1,batt_volt,FP2,(inbetween_1hz_scan OR batt_volt=NAN))
EndTable

'30min statistics
DataTable (stats30,TRUE,10)
  DataInterval (0,STAT_OUT_30,Min,10)
  CardOut (0, DAYS*48)
  Sample(1,L,IEEE4)                     'monin obukhov length, meters
  Sample(1,u_star,FP2)                  'friction velocity, m/s  
  Sample(1,tau,FP2)                     'momemtum flux, kg/(m s^2)
  Sample(1,Fc_wpl,IEEE4)                'density-corrected (WPL) CO2 flux, mg/m3
  Sample(1,LE_wpl,FP2)                  'density-corrected (WPL) latent heat flux, W/m2
  Sample(1,Hc,FP2)                      'density-corrected sensible heat flux, W/m2
  Average(1,Ts,FP2,sonic_disable_f)     'mean sonic temperature, degC
  Sample(1,Ts_Std,FP2)                  'stdev of sonic temp, degC
  Sample(1,Tc_Avg,FP2)                 'mean of corrected sonic temp, degC
  Sample(1,Uz_Std,FP2)                  'stdev of vertical wind, m/s
  Sample(1,wnd_spd,FP2)                 'mean scalar wind speed, m/s
  Sample(1,rslt_wnd_spd,FP2)            'vector mean wind speed, m/s
  Sample(1,rslt_wnd_dir,FP2)         'mean wind direction rel2 north, degrees
  Sample(1,std_wnd_dir,FP2)             'scalar stdev of wind direction, degrees
  Sample(1,sonic_uptime,FP2)
  Average(1,CO2_ppm,FP2,irga_disable_f)
  Sample (1,CO2_mg_m3_Avg,FP2)                'mean of CO2 conc, mg/m3
  Sample (1,CO2_mg_m3_Std,FP2)               'stdev of CO2 conc, mg/m3
  Average(1,CO2_signal,FP2,irga_disable_f)
  Average(1,(Xv / MU_WPL),FP2,irga_disable_f)
    FieldNames("H2O_g_kg_Avg")
  Sample (1,H2O_g_m3_Avg,FP2)                'mean of H2O conc, g/m3
  Sample (1,H2O_g_m3_Std,FP2)               'stdev of H2O conc, g/m3
  Average(1,H2O_signal,FP2,irga_disable_f)
  Average(1,amb_tmpr,IEEE4,irga_disable_f)
  Sample (1,amb_press_Avg,IEEE4)        'mean of ambient pressure, kPa
  Sample (1,irga_uptime,FP2)
  Average(1,T_hmp,IEEE4,(inbetween_1hz_scan OR T_hmp=NAN))
  Sample (1,RH_hmp_Avg,FP2)             'mean HMP relative humidity, %
  Sample (1,e_hmp_Avg,FP2)
  Sample (1,e_sat_hmp_Avg,FP2)
  Average(1,Rn,FP2,(inbetween_1hz_scan OR Rn=NAN))
  Average(1,Rn_meas,FP2,inbetween_1hz_scan OR Rn_meas=NAN))
  Totalize(1,PAR_totflx,FP2,(inbetween_1hz_scan OR PAR_totflx=NAN))
  Average(1,PAR_flxdens,FP2,(inbetween_1hz_scan OR PAR_flxdens=NAN))
  WindVector(1,WS_ms,WindDir,FP2,(WS_ms=NAN OR WindDir=NAN),0,0,2)
    FieldNames("Met1_wnd_spd,Met1_rslt_wnd_spd,Met1_rslt_wnd_dir,Met1_std_wnd_dir")
    'units propogate from other datatable since names match
  Totalize(1,Rain_mm,FP2,Rain_mm=NAN) '10hz loop
  Average(1,soil_5TM_ID5_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID5_E=NAN))
  Average(1,soil_5TM_ID5_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID5_T=NAN))
  Average(1,soil_5TM_ID5_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID5_VWC=NAN))
  Average(1,soil_5TM_ID6_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID6_E=NAN))
  Average(1,soil_5TM_ID6_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID6_T=NAN))
  Average(1,soil_5TM_ID6_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID6_VWC=NAN))
  Average(1,soil_5TM_ID7_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID7_E=NAN))
  Average(1,soil_5TM_ID7_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID7_T=NAN))
  Average(1,soil_5TM_ID7_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID7_VWC=NAN))
  Average(1,soil_5TM_ID8_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID8_E=NAN))
  Average(1,soil_5TM_ID8_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID8_T=NAN))
  Average(1,soil_5TM_ID8_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID8_VWC=NAN))
  Average(1,soil_5TM_ID9_E,  IEEE4,(inbetween_5s_scan OR soil_5TM_ID9_E=NAN))
  Average(1,soil_5TM_ID9_T,  FP2,  (inbetween_5s_scan OR soil_5TM_ID9_T=NAN))
  Average(1,soil_5TM_ID9_VWC,FP2,  (inbetween_5s_scan OR soil_5TM_ID9_VWC=NAN))
  Average(1,soil_hfp1_heat_flux,  IEEE4,(inbetween_5s_scan OR hfp_isCalibrating OR soil_hfp1_heat_flux=NAN))
  Sample (1,soil_hfp1_sensitivity,IEEE4)
  Average(1,soil_hfp2_heat_flux,  IEEE4,(inbetween_5s_scan OR hfp_isCalibrating OR soil_hfp2_heat_flux=NAN))
  Sample (1,soil_hfp2_sensitivity,IEEE4)
  Average(1,panel_tmpr,FP2,(inbetween_1hz_scan OR panel_tmpr=NAN))
  Average(1,batt_volt,FP2,(inbetween_1hz_scan OR batt_volt=NAN))
EndTable

'Daily values
DataTable (site_daily,TRUE,2)
  DataInterval (0,1,Day,10)
  CardOut(0, DAYS)
  Median(1,(latitude_a + latitude_b/60),DAILY_MEDNUM,IEEE4,(latitude_a=NAN OR latitude_b=NAN))
    FieldNames("latitude_Med")
    Units latitude_Med = decDegreesN
  Median(1,(longitude_a + longitude_b/60),DAILY_MEDNUM,IEEE4,(longitude_a=NAN OR longitude_b=NAN))
    FieldNames("longitude_Med")
    Units longitude_Med = decDegreesE
  Median(1,magnetic_variation,DAILY_MEDNUM,FP2,magnetic_variation=NAN)
  Average(1,nmbr_satellites,FP2,nmbr_satellites=NAN)
  Median(1,altitude,DAILY_MEDNUM,IEEE4,altitude=NAN)
  Average(1,altitude,IEEE4,altitude=NAN)
  Minimum(1,gps_ready,FP2,gps_ready=NAN,0)
  Sample(1,max_clock_change,UINT2)
  Sample(1,nmbr_clock_change,UINT2)
  Minimum(1,batt_volt,FP2,batt_volt=NAN,1)
  Maximum(1,batt_volt,FP2,batt_volt=NAN,1)
  Minimum(1,T_hmp,FP2,T_hmp=NAN,1)
  Maximum(1,T_hmp,FP2,T_hmp=NAN,1)
EndTable

'program start-up information
DataTable (site_info,TRUE,20)
  CardOut(0,1000)
  Sample(1,UTC_OFFSET,FP2)
    FieldNames("UTC_offset")
    Units UTC_OFFSET = hours
  Sample(1,sonic_azimuth,FP2)
  Sample(1,NRLite2_sens,FP2)
  Sample(1,LI190SB_sens,FP2)
  Sample(1,soil_hfp1_sensitivity,IEEE4)            'heat flux plate #1 info
    FieldNames("HFP_1_sens")
    Units HFP_1_SENS = W/m^2/mV
  Sample(1,soil_hfp2_sensitivity,IEEE4)            'heat flux plate #2 info
    FieldNames("HFP_2_sens")
    Units HFP_2_SENS = W/m^2/mV
  Sample(1,Status.CompileResults,String)
    FieldNames("CompileResults")
  Sample(1,Status.CardStatus,String)
    FieldNames("CardStatus")
  Sample(1,Status.RunSignature,UINT2) 'program information
    FieldNames("RunSig")
  Sample(1,Status.ProgSignature,UINT2)
    FieldNames("ProgSig")
  Sample(1,GIT_TAG,String)
    FieldNames("GitRepoTag")
  Sample(1,sensor_shfp,Boolean)
    FieldNames("hfp_installed")
EndTable

'metadata pertaining to optional sensors
'XXXX TODO how should this table be changed?
#If (LGR_N2O_ENABLED OR PIC_CH4_ENABLED OR NDVIPRI_ENABLED) Then
  DataTable(extra_info,True,10)
    'CardOut(0,1000)
    Sample(1,NDVIPRI_ENABLED,Boolean)
      FieldNames("Decagon_NDVI_installed")
    Sample(1,NDVIPRI_ENABLED,Boolean)
      FieldNames("Decagon_PRI_installed")
    Sample(1,LGR_N2O_ENABLED,Boolean)
      FieldNames("LGR_n2oco_installed")
    Sample(1,lgr_n2o_mult,IEEE4)
    Sample(1,lgr_n2o_offset,IEEE4)
    Sample(1,lgr_co_mult,IEEE4)
    Sample(1,lgr_co_offset,IEEE4)
    Sample(1,lgr_h2o_mult,IEEE4)
    Sample(1,lgr_h2o_offset,IEEE4)
    Sample(1,PIC_CH4_ENABLED,Boolean)
      FieldNames("Picarro_co2ch4_installed")
    Sample(1,pic_co2_mult,IEEE4)
    Sample(1,pic_co2_offset,IEEE4)
    Sample(1,pic_ch4_mult,IEEE4)
    Sample(1,pic_ch4_offset,IEEE4)
    Sample(1,pic_h2o_mult,IEEE4)
    Sample(1,pic_h2o_offset,IEEE4)
  EndTable
#EndIf

'===========================  SUPPLEMENTAL OUTPUT DATA TABLES  ==========================
#If (LGR_N2O_ENABLED OR PIC_CH4_ENABLED) Then
  DataTable(tsdata_extra,True,-1)
    DataInterval(0,FAST_INTV,mSec,100)
    'CardOut(0,-1)
    Sample(1,lgr_n2o,IEEE4)
    Sample(1,lgr_co,IEEE4)
    Sample(1,lgr_h2o,IEEE4)
  
    Sample (1,pic_co2,IEEE4)
    Sample (1,pic_ch4,IEEE4)
    Sample (1,pic_h2o,IEEE4)
  EndTable
#EndIf

#If (NDVIPRI_ENABLED) Then
  DataTable(stats5_ui,True,-1)
    DataInterval(0,STAT_OUT_5,min,10)
    'CardOut(0,-1) 
    Average(1,dec_ndvi_up1,IEEE4,dec_ndvi_up1=NAN)
    Average(1,dec_ndvi_up2,IEEE4,dec_ndvi_up2=NAN)
    Average(1,dec_ndvi_dn1,IEEE4,dec_ndvi_dn1=NAN)
    Average(1,dec_ndvi_dn2,IEEE4,dec_ndvi_dn2=NAN)
    Average(1,dec_pri_up1,IEEE4,dec_pri_up1=NAN)
    Average(1,dec_pri_up2,IEEE4,dec_pri_up2=NAN)
    Average(1,dec_pri_dn1,IEEE4,dec_pri_dn1=NAN)
    Average(1,dec_pri_dn2,IEEE4,dec_pri_dn2=NAN)
    Totalize(1,n,UINT2,FALSE)
      FieldNames("tblcalls_Tot")
  EndTable
  
  DataTable(stats30_ui,True,-1)
    DataInterval(0,STAT_OUT_30,min,10)
    'CardOut(0,-1)
    Average(1,dec_ndvi_up1,IEEE4,dec_ndvi_up1=NAN)
    Average(1,dec_ndvi_up2,IEEE4,dec_ndvi_up2=NAN)
    Average(1,dec_ndvi_dn1,IEEE4,dec_ndvi_dn1=NAN)
    Average(1,dec_ndvi_dn2,IEEE4,dec_ndvi_dn2=NAN)
    Average(1,dec_pri_up1,IEEE4,dec_pri_up1=NAN)
    Average(1,dec_pri_up2,IEEE4,dec_pri_up2=NAN)
    Average(1,dec_pri_dn1,IEEE4,dec_pri_dn1=NAN)
    Average(1,dec_pri_dn2,IEEE4,dec_pri_dn2=NAN)
    Totalize(1,n,UINT2,FALSE)
      FieldNames("tblcalls_Tot")
  EndTable
#EndIf
  

'================================= EMAIL =====================================
Include "CPU:email_Enc.cr3"  'contains non-public settings
Const CRLF = CHR(13) & CHR(10)
Dim smtp_response As String * 80

Sub send_startup_email()
  Dim subject As String * 40, msg As String * 512
  subject = "Start-up notice from " & self & " CR3000"
  msg = ("This is the " & self & " CR3000. Starting up..." & CRLF & CRLF)
  'HINT both CompileResults and CardStatus come with a trailing <CR><LF> but 
  'CardStatus has a CRLF pair in the middle which must be stripped out
  msg &= "Compile results: " & RTrim(Status.CompileResults(1))
  msg &= "Card status: " & RTrim(Replace(Status.CardStatus(1), CRLF, " "))
  msg &= CRLF & "Program error count: " & Status.ProgErrors & CRLF
  msg &= "Watchdog error count: " & Status.WatchdogErrors & CRLF
  msg &= "Run signature: " & Status.RunSignature & CRLF
  msg &= "Program signature: " & Status.ProgSignature & CRLF
  msg &= "Power input (Volts): " & Status.Battery & CRLF
  EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,subject,msg,"",SMTP_USER,SMTP_PASS,smtp_response)
EndSub

Sub send_test_email()
  Dim subject As String * 40, msg As String * 512
  subject = "Test email from " & self & " CR3000"
  msg = "This is the " & self & " CR3000. Testing 1.. 2.. 3.." & CRLF
  EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,subject,msg,"",SMTP_USER,SMTP_PASS,smtp_response)
EndSub

Sub send_daily_email()
  Dim subject As String * 40, msg As String * 512
  subject = "Daily notice from " & self & " CR3000"
  
  GetRecord(out_daily(1),site_daily,1)
  msg = "Good morning. Yesterday the temperature ranged from "
  msg &= FormatFloat(min_tmpr, "%3g") & " to "
  msg &= FormatFloat(max_tmpr, "%3g") & " degC. Power input varied from "
  msg &= FormatFloat(min_battery, "%3g") & " to "
  msg &= FormatFloat(max_battery, "%3g") & " volts." & CRLF
  EmailSend(SMTP_SERV,EMAIL_TO,EMAIL_FROM,subject,msg,"",SMTP_USER,SMTP_PASS,smtp_response)
EndSub


'============================= SCADABR INTEGRATION ==================================
Include("CPU:scadabr_Enc.cr3")
Public test_scadabr As Boolean

Dim scadabr_socket As Long
Dim rtime(9) As Long
Dim scadabr_success As Boolean
Dim scadabr_resp As String * 256
Sub send_scadabr_data(payload)
  Dim payload As String * 256
  Dim uri As String * 512
  Dim tstamp As String * 18
  RealTime(rtime)
  Sprintf(tstamp,"%04u%02u%02u%02u%02u%02u", rtime(1),rtime(2),rtime(3),rtime(4),rtime(5),rtime(6))
  uri = REPORT_URL & tstamp & payload
  scadabr_socket = HTTPGet(uri, scadabr_resp, "")
  scadabr_success = (scadabr_socket > 100)  
EndSub

Sub send_test_ScadaBR()
  send_scadabr_data("&testlisten=0")
EndSub

Sub send_5min_report()
  Dim msg As String * 512
  msg  = "&skipped_10hz_scans=" & skipped_10hz_scans
  msg &= "&skipped_1hz_scans=" & skipped_1hz_scans
  msg &= "&skipped_5s_scans=" & skipped_5s_scans
  msg &= "&watchdog_errors=" & watchdog_errors
  send_scadabr_data(msg)
EndSub

Sub send_startup_report()
  Dim msg As String * 512
  'HINT both CompileResults and CardStatus come with a trailing <CR><LF> but 
  'CardStatus has a CRLF pair in the middle which must be stripped out
'  msg &= "&compileresults=" & RTrim(Replace(Status.CompileResults(1), CRLF, " "))
'  msg &= "cardstatus=" & RTrim(Replace(Status.CardStatus(1), CRLF, " "))
  msg &= "&progerrors=" & Status.ProgErrors
  msg &= "&watchdogerrors=" & Status.WatchdogErrors
  msg &= "&runsignature=" & Status.RunSignature
  msg &= "&progsignature=" & Status.ProgSignature
  msg &= "&battery=" & Status.Battery
  send_scadabr_data(msg)
EndSub


'===============================  FUNCTIONS  ============================================
Function Topp_equation( dielectric )
  Return 4.3e-6*dielectric^3 - 5.5e-4*dielectric^2 + 2.92e-2*dielectric - 5.3e-2
EndFunction


'===============================  SUBROUTINES  ==========================================
Sub set_default_choices()
  set_sonic_azimuth  = NAN
  set_NRLite2_sens   = 0
  set_LI190SB_sens   = 0
  set_cup_ws_enabled = False
  set_vane_wd_enabled = False
  set_rain_enabled   = False
  set_soil_5_enabled = False
  set_soil_6_enabled = False
  set_soil_7_enabled = False
  set_soil_8_enabled = False
  set_soil_9_enabled = False
  set_hfp1_sens      = 0
  set_hfp1_R         = 0
  set_hfp1_A         = 0
  set_hfp2_sens      = 0
  set_hfp2_R         = 0
  set_hfp2_A         = 0
  set_lgr_n2o_mult   = 1.0
  set_lgr_n2o_offset = 0
  set_lgr_co_mult    = 1.0
  set_lgr_co_offset  = 0
  set_lgr_h2o_mult   = 1.0
  set_lgr_h2o_offset = 0
  set_pic_co2_mult   = 1.0
  set_pic_co2_offset = 0
  set_pic_ch4_mult   = 1.0
  set_pic_ch4_offset = 0
  set_pic_h2o_mult   = 1.0
  set_pic_h2o_offset = 0
EndSub

Sub populate_choices()
  Move(choice(1),NUM_SETTINGS,settings(1),NUM_SETTINGS)
EndSub

Sub save_current_choices()
  'input validation

  Move(settings(1),NUM_SETTINGS,choice(1),NUM_SETTINGS)
  Calfile(settings,NUM_SETTINGS,SETTINGS_FILE,WRITEFILE)

  'update dependent variables
  nrlite_mult = 1000/NRLite2_sens
  li190_dens_mult = 1000/(LI190SB_sens*0.604)
  li190_tot_mult = (1/(LI190SB_sens*0.604))*(FAST_INTV/1000)
  If (NOT soil_5_enabled) Then Move(fiveTM(1),3,NAN,1)
  If (NOT soil_6_enabled) Then Move(fiveTM(4),3,NAN,1)
  If (NOT soil_7_enabled) Then Move(fiveTM(7),3,NAN,1)
  If (NOT soil_8_enabled) Then Move(fiveTM(10),3,NAN,1)
  If (NOT soil_9_enabled) Then Move(fiveTM(13),3,NAN,1)
  #If (SHFP_ENABLED) Then
    soil_hfp1_sensitivity = 1000/hfp1_sens
    soil_hfp2_sensitivity = 1000/hfp2_sens
    hfp1_selfcal_mult = hfp1_R / (2 * HFP_R_CUR^2 * hfp1_A)
    hfp2_selfcal_mult = hfp2_R / (2 * HFP_R_CUR^2 * hfp2_A)
  #Else
    soil_hfp1_heat_flux = NAN
    soil_hfp1_sensitivity = 0
    soil_hfp2_heat_flux = NAN
    soil_hfp2_sensitivity = 0
  #EndIf
  #If (LGR_N2O_ENABLED) Then
    Move(lgrn2oco(1),3,NAN,1)
  #EndIf
  #If (PIC_CH4_ENABLED) Then
    Move(picco2ch4(1),3,NAN,1)
  #EndIf
EndSub

Sub setup()
  filehandle = FileOpen(SETTINGS_FILE,"rb",0) ' attempt to open file
  FileClose(filehandle)
  If (filehandle = 0) Then 'if file not found
    set_default_choices()
  Else    
    Calfile(settings,NUM_SETTINGS,SETTINGS_FILE,READFILE)
    populate_choices()
  EndIf
  save_current_choices()

  CallTable (site_info)
  #If (LGR_N2O_ENABLED OR PIC_CH4_ENABLED OR NDVIPRI_ENABLED) Then
    CallTable(extra_info)
  #EndIf

  Move(lgrn2oco(1),3,NAN,1)
  Move(picco2ch4(1),3,NAN,1)
  Move(fiveTM(1),15,NAN,1)
  SDMSpeed (SDM_PER)
  self = Status.StationName
EndSub


'================================  MENU  ================================================
Const Enable = True
Const Yes = True
Const Apply = True
Const Disable = False
Const No = False
Const Cancel = False
Public save_changes As Boolean
Dim recompile As Boolean

'HINT define after `save_changes` so these appear below it in Public table
Public test_email As Boolean

DisplayMenu("REACCH DAQ", -1) 'add submenu to main
  SubMenu("Initial Setup")
    SubMenu("Soil heat flux plate")
      MenuItem("Enable?", SHFP_ENABLED)
        MenuPick(No, Yes)
    EndSubMenu
    SubMenu("Decagon NDVI/PRI")
      MenuItem("Enable?", NDVIPRI_ENABLED)
        MenuPick(No, Yes)
      DisplayLine("SDI Addresses:")
      DisplayValue("NDVI up-facing", DEC_NDVI_UP_SDI_ADDR)
      DisplayValue("NDVI down-facing", DEC_NDVI_DN_SDI_ADDR)
      DisplayValue("PRI up-facing", DEC_PRI_UP_SDI_ADDR)
      DisplayValue("PRI down-facing", DEC_PRI_DN_SDI_ADDR)
    EndSubMenu
    SubMenu("LGR N2O/CO")
      MenuItem("Enable?", LGR_N2O_ENABLED)
        MenuPick(No, Yes)
    EndSubMenu
    SubMenu("Picarro CO2/CH4")
      MenuItem("Enable?", PIC_CH4_ENABLED)
        MenuPick(No, Yes)
    EndSubMenu
    MenuRecompile("Apply now?", recompile)
      MenuPick(No, Apply) 
  EndSubMenu

  SubMenu("Settings")
    MenuItem("Sonic azimuth", set_sonic_azimuth)
    MenuItem("NR sensitivity", set_NRLite2_sens)
    MenuItem("PAR sensitivity", set_LI190SB_sens)
    SubMenu("Cup & vane windset")
      MenuItem("Enable WS?", set_cup_ws_enabled)
        MenuPick(Yes, No)
      MenuItem("Enable WD?", set_vane_wd_enabled)
        MenuPick(Yes, No)
    EndSubMenu
    SubMenu("Rain gage")
      MenuItem("Enable?", set_rain_enabled)
        MenuPick(Yes, No)
    EndSubMenu
    SubMenu("Soil moisture probes")
      MenuItem("Enable 5 ?", set_soil_5_enabled)
        MenuPick(Yes, No)
      MenuItem("Enable 6 ?", set_soil_6_enabled)
        MenuPick(Yes, No)
      MenuItem("Enable 7 ?", set_soil_7_enabled)
        MenuPick(Yes, No)
      MenuItem("Enable 8 ?", set_soil_8_enabled)
        MenuPick(Yes, No)
      MenuItem("Enable 9 ?", set_soil_9_enabled)
        MenuPick(Yes, No)
    EndSubMenu
    #If (SHFP_ENABLED) Then
      SubMenu("Soil heat flux plate")
        DisplayLine("Plate #1 (DF 6):")
        MenuItem("Sensitivity", set_hfp1_sens)
        MenuItem("Resistance", set_hfp1_R)
        MenuItem("Area", set_hfp1_A)
        DisplayLine("Plate #2 (DF 7):")
        MenuItem("Sensitivity", set_hfp2_sens)
        MenuItem("Resistance", set_hfp2_R)
        MenuItem("Area", set_hfp2_A)
      EndSubMenu
    #Else
      DisplayLine("SHFP disabled")
    #EndIf
    #If (LGR_N2O_ENABLED) Then
      SubMenu("LGR N2O/CO/H2O")
        MenuItem("N2O Mult. (units/mV)", set_lgr_n2o_mult)
        MenuItem("N2O Offset (units@0mV)", set_lgr_n2o_offset)
        MenuItem("CO Mult. (units/mV)", set_lgr_co_mult)
        MenuItem("CO Offset (units@0mV)", set_lgr_co_offset)
        MenuItem("H2O Mult. (units/mV)", set_lgr_h2o_mult)
        MenuItem("H2O Offset (units@0mV)", set_lgr_h2o_offset)
      EndSubMenu
    #Else
      DisplayLine("N2O/CO disabled")
    #EndIf
    #If (PIC_CH4_ENABLED) Then
      SubMenu("Picarro CO2/CH4/H2O")
        MenuItem("CO2 Mult. (units/mV)", set_pic_co2_mult)
        MenuItem("CO2 Offset (units@0mV)", set_pic_co2_offset)
        MenuItem("CH4 Mult. (units/mV)", set_pic_ch4_mult)
        MenuItem("CH4 Offset (units@0mV)", set_pic_ch4_offset)
        MenuItem("H2O Mult. (units/mV)", set_pic_h2o_mult)
        MenuItem("H2O Offset (units@0mV)", set_pic_h2o_offset)
      EndSubMenu
    #Else
      DisplayLine("CH4/CO2 disabled")
    #EndIf
    SubMenu("Save changes")
      MenuItem("Save now?", save_changes)
        MenuPick(Cancel,Yes)
    EndSubMenu
  EndSubMenu
  
  SubMenu("Debug")
    SubMenu("Monitor sensors")
      DisplayValue("sonic Ux", sonic_irga_raw(1))
      DisplayValue("sonic Uy", sonic_irga_raw(2))
      DisplayValue("sonic Uz", sonic_irga_raw(3))
      DisplayValue("sonic Ts", sonic_irga_raw(4))
      DisplayValue("sonic diag", sonic_irga_raw(5))
      DisplayValue("irga CO2", sonic_irga_raw(6))
      DisplayValue("irga H2O", sonic_irga_raw(7))
      DisplayValue("irga diag", sonic_irga_raw(8))
      DisplayValue("irga tmpr", sonic_irga_raw(9))
      DisplayValue("irga press", sonic_irga_raw(10))
      DisplayValue("irga CO2 sig", sonic_irga_raw(11))
      DisplayValue("irga H2O sig", sonic_irga_raw(12))
      DisplayValue("HMP tmpr", T_hmp)
      DisplayValue("HMP RH", RH_hmp)
      DisplayValue("NR Rn", Rn)
      DisplayValue("NR Rn meas", Rn_meas)
      DisplayValue("PAR mV", PAR_mV)
      DisplayValue("PAR flx dens", PAR_flxdens)
      DisplayValue("034B WS", WS_ms)
      DisplayValue("034B WD", WindDir)
      DisplayValue("Rain", Rain_mm)
      DisplayValue("GPS lat deg", latitude_a)
      DisplayValue("GPS lat min", latitude_b)
      DisplayValue("GPS long deg", longitude_a)
      DisplayValue("GPS long min", longitude_b)
      DisplayValue("GPS speed", speed)
      DisplayValue("GPS course", course)
      DisplayValue("GPS mag var", magnetic_variation)
      DisplayValue("GPS fix qual", fix_quality)
      DisplayValue("GPS num sats", nmbr_satellites)
      DisplayValue("GPS altitude", altitude)
      DisplayValue("GPS pps", pps)
      DisplayValue("GPS msg time", dt_since_gprmc)
      DisplayValue("GPS ready", gps_ready)
      DisplayValue("GPS max adj", max_clock_change)
      DisplayValue("GPS num adj", nmbr_clock_change)
      DisplayValue("5TM #5 e", soil_5TM_ID5_E)
      DisplayValue("5TM #5 tmpr", soil_5TM_ID5_T)
      DisplayValue("5TM #6 e", soil_5TM_ID6_E)
      DisplayValue("5TM #6 tmpr", soil_5TM_ID6_T)
      DisplayValue("5TM #7 e", soil_5TM_ID7_E)
      DisplayValue("5TM #7 tmpr", soil_5TM_ID7_T)
      DisplayValue("5TM #8 e", soil_5TM_ID8_E)
      DisplayValue("5TM #8 tmpr", soil_5TM_ID8_T)
      DisplayValue("5TM #9 e", soil_5TM_ID9_E)
      DisplayValue("5TM #9 tmpr", soil_5TM_ID9_T)
      DisplayValue("SHFP 1 flux", soil_hfp1_heat_flux)
      DisplayValue("SHFP 1 sens", soil_hfp1_sensitivity)
      DisplayValue("SHFP 2 flux", soil_hfp2_heat_flux)
      DisplayValue("SHFP 2 sens", soil_hfp2_sensitivity)
      DisplayValue("LGR N2O", lgr_n2o)
      DisplayValue("LGR CO", lgr_co)
      DisplayValue("LGR H2O", lgr_h2o)
      DisplayValue("Pic. CO2", pic_co2)
      DisplayValue("Pic. CH4", pic_ch4)
      DisplayValue("Pic. H2O", pic_h2o)
      DisplayValue("NDVI up 1", dec_ndvi_up1)
      DisplayValue("NDVI up 2", dec_ndvi_up2)
      DisplayValue("NDVI dn 1", dec_ndvi_dn1)
      DisplayValue("NDVI dn 2", dec_ndvi_dn2)
      DisplayValue("PRI up 1", dec_pri_up1)
      DisplayValue("PRI up 2", dec_pri_up2)
      DisplayValue("PRI dn 1", dec_pri_dn1)
      DisplayValue("PRI dn 2", dec_pri_dn2)
    EndSubMenu
    MenuItem("Debug table", debug_on)
      MenuPick(Disable,Enable)
    MenuItem("Test email", test_email)
      MenuPick(Cancel,Yes)
    MenuItem("Test ScadaBR", test_scadabr)
      MenuPick(Cancel,Yes)
  EndSubMenu
EndMenu

'================================  PROGRAM  =============================================
BeginProg
  setup()
  send_startup_email()
  send_startup_report()

  Scan (FAST_INTV,mSec,FAST_BUFFER_SIZE,0)
        
    '== 034B wind vane acquisition
    BrHalf(WindDir,1,mV5000,oh34B_WD_SE,oh34B_WD_VX,1,5000,True,0,INTEG,oh34B_WD_MULT,oh34B_WD_OFFSET)
    If (vane_wd_enabled) Then
      If ((WindDir >= 360) OR (WindDir < 0)) Then (WindDir = 0)
    Else
      WindDir = NAN
    EndIf
    PulseCount(WS_ms,1,oh34B_WS_PULSE,2,1,oh34B_WS_MULT,oh34B_WS_OFFSET)
    If (cup_ws_enabled) Then
      If (WS_ms <= oh34B_WS_OFFSET) Then (WS_ms = 0)
    Else
      WS_ms = NAN
    EndIf
    
    '== TE525 rain gage acquisition
    PulseCount(Rain_mm,1,TE525_PULSE,2,0,TE525_MULT,TE525_OFFSET)
    If (NOT rain_enabled) Then Rain_mm = NAN
    
    '== EC100/EC150/CSAT3A irga/sonic acquisition 
    EC100 (sonic_irga_raw(1),EC100_SDM_ADDR,1)
    CallTable(work_delay_ec100)
    CallTable(tsdata)

    '== NR-Lite2 correction factor calc
    hor_wind_raw = SQR (sonic_irga_raw(1)*sonic_irga_raw(1)+sonic_irga_raw(2)*sonic_irga_raw(2))
    AvgRun (hor_wind,1,hor_wind_raw,NMBR_WND_SAMPLES) '3-sec running mean of horiz. WS

    '== optional LGR N2O/CO acquisition
    #If (LGR_N2O_ENABLED) Then
      VoltDiff(lgr_n2o,1,mv5000,LGR_N2O_DIFF,TRUE,0,INTEG,lgr_n2o_mult,lgr_n2o_offset)
      VoltDiff(lgr_co,1,mv5000,LGR_CO_DIFF,TRUE,0,INTEG,lgr_co_mult,lgr_co_offset)
      VoltDiff(lgr_h2o,1,mv5000,LGR_H2O_DIFF,TRUE,0,INTEG,lgr_h2o_mult,lgr_h2o_offset)
    #EndIf
    '== optional Picarro CO2/CH4 acquisition
    #If (PIC_CH4_ENABLED) Then
      VoltDiff(pic_co2,1,mv5000,PIC_CO2_DIFF,TRUE,0,INTEG,pic_co2_mult,pic_co2_offset)
      VoltDiff(pic_ch4,1,mv5000,PIC_CH4_DIFF,TRUE,0,INTEG,pic_ch4_mult,pic_ch4_offset)
      VoltDiff(pic_h2o,1,mv5000,PIC_H2O_DIFF,TRUE,0,INTEG,pic_h2o_mult,pic_h2o_offset)
    #EndIf
    #If (LGR_N2O_ENABLED OR PIC_CH4_ENABLED) Then
      CallTable(tsdata_extra)
    #EndIf

    If ( scan_count >= OFFSET ) Then  'IF HAVE ENUF SCANS TO DO STATS,
      
      '== EC100/EC150/CSAT3A lagged data retrieval
      GetRecord (dly_data_out(1),work_delay_ec100,EC150_REC_BCK)
      Move (Ux,5,dly_data_out(1),5) 'Ux, Uy, Uz, Ts, diag_sonic
      Move (CO2,7,dly_data_out(6),7) '+H2O,diag_irga,amb_tmpr,amb_press,CO2_signal,H2O_signal
      If ( (diag_sonic <> NAN) AND (diag_sonic <> -1) ) Then 
        sonic_disable_f = diag_sonic AND &h3f  '= 0011 1111
      Else 
        Move(Ux,5,NAN,1)
        sonic_disable_f = TRUE
      EndIf
      Ts_absolute = IIF(sonic_disable_f, NAN, Ts+273.15)
      If ( (diag_irga <> NAN) AND (diag_irga <> -1) ) Then 
        irga_disable_f = sonic_disable_f OR (diag_irga AND &h1) 'bit 0 always HI for warning 
      Else
        Move(CO2,7,NAN,1)
        irga_disable_f = TRUE
      EndIf
      If ( NOT irga_disable_f ) Then
        Tc = Ts_absolute/(1+0.32*H2O*R*Ts_absolute/(amb_press*18)) - 273.15'Kaimal and Gaynor (1991) Eq. (3).
        divisor = (amb_press/(R*(Tc+273.15)))-(H2O/18) 'mixing ratio (X/dry air)
        CO2_ppm=CO2/(0.044*divisor)
        Xv=H2O/(0.018*divisor)
      Else
        Tc=NAN
        CO2_ppm=NAN
        Xv=NAN
      EndIf

      'sonic cov for stats 1
      cov_array_sonic(1,1) = Ts
      Move (cov_array_sonic(1,2),3,Ux,3)

      'irga cov for stats 1
      cov_array_cs(1,1) = CO2
      cov_array_cs(2,1) = H2O
      cov_array_cs(3,1) = Tc
      Move (cov_array_cs(1,2),3,Ux,3)
      Move (cov_array_cs(2,2),3,Ux,3)
      Move (cov_array_cs(3,2),3,Ux,3)
      
      '+++++  5 minute statistics  ++++++

      CallTable (work_5min)
      If ( work_5min.Output(1,1) ) Then
        GetRecord(work_stats_out(1),work_5min,1)
        
        sonic_uptime = sonic_samples/samples_possible
        irga_uptime = irga_samples/samples_possible
        
        'add azimuth to calculated wind dir
        rslt_wnd_dir = (360 + rslt_wnd_dir + sonic_azimuth) MOD 360
        tau = SQR ((Ux_Uz_cov*Ux_Uz_cov)+(Uy_Uz_cov*Uy_Uz_cov))
        u_star = SQR (tau)
        Ts_Std = SQR (Ts_Std)
        Ux_Std = SQR (Ux_Std)
        Uy_Std = SQR (Uy_Std)
        Uz_Std = SQR (Uz_Std)
        
        L=-u_star^3*(Tc_Avg+273.15)/(0.4*9.8*Ts_Uz_cov)   'obukohov length
        rho_d_mean = (amb_press_Avg/((Tc_Avg+273.15)*RD))-(H2O_g_m3_Avg*MU_WPL)
        rho_a_mean = (rho_d_mean+H2O_g_m3_Avg)/1000
        Fc_irga = CO2_Uz_cov                                'online fluxes
        LE_irga = LV*H2O_Uz_cov
        CO2_mg_m3_Std = SQR (CO2_mg_m3_Std)                        'stdevs
        H2O_g_m3_Std = SQR (H2O_g_m3_Std)
        Tc_stdev = SQR (Tc_stdev)
        sigma_wpl = H2O_g_m3_Avg/rho_d_mean                   'WPL term

        'EC150 Webb et al. (1980) term for carbon dioxide Eq. (24).
        CO2_wpl_LE = MU_WPL*CO2_mg_m3_Avg/rho_d_mean*H2O_Uz_cov
        CO2_wpl_H = (1+(MU_WPL*sigma_wpl))*CO2_mg_m3_Avg/(Tc_Avg+273.15)*Tc_Uz_cov
        Fc_wpl = Fc_irga+CO2_wpl_LE+CO2_wpl_H

        'EC150 Webb et al. (1980) term for water vapor Eq. (25).
        H2O_wpl_LE = MU_WPL*sigma_wpl*LE_irga
        H2O_wpl_H = (1+(MU_WPL*sigma_wpl))*H2O_g_m3_Avg/(Tc_Avg+273.15)*LV*Tc_Uz_cov
        LE_wpl = LE_irga+H2O_wpl_LE+H2O_wpl_H

        RH_hmp_Avg = 100*e_hmp_Avg/e_sat_hmp_Avg

        Hs = rho_a_mean*CP*Ts_Uz_cov
        tau = rho_a_mean*tau
        Hc = rho_a_mean*CP*Tc_Uz_cov
      EndIf
      CallTable(stats5)

      '+++++ 30 min statistics  +++++
      
      CallTable (work_30min)
      If ( work_30min.Output(1,1) ) Then
        GetRecord(work_stats_out(1),work_30min,1)
        
        sonic_uptime = sonic_samples/samples_possible
        irga_uptime = irga_samples/samples_possible
        
        'add azimuth to calculated wind dir
        rslt_wnd_dir = (360 + rslt_wnd_dir + sonic_azimuth) MOD 360
        tau = SQR ((Ux_Uz_cov*Ux_Uz_cov)+(Uy_Uz_cov*Uy_Uz_cov))
        u_star = SQR (tau)
        Ts_Std = SQR (Ts_Std)
        Ux_Std = SQR (Ux_Std)
        Uy_Std = SQR (Uy_Std)
        Uz_Std = SQR (Uz_Std)
        
        L=-u_star^3*(Tc_Avg+273.15)/(0.4*9.8*Ts_Uz_cov)   'obukohov length
        rho_d_mean = (amb_press_Avg/((Tc_Avg+273.15)*RD))-(H2O_g_m3_Avg*MU_WPL)
        rho_a_mean = (rho_d_mean+H2O_g_m3_Avg)/1000
        Fc_irga = CO2_Uz_cov                                'online fluxes
        LE_irga = LV*H2O_Uz_cov
        CO2_mg_m3_Std = SQR (CO2_mg_m3_Std)                        'stdevs
        H2O_g_m3_Std = SQR (H2O_g_m3_Std)
        Tc_stdev = SQR (Tc_stdev)
        sigma_wpl = H2O_g_m3_Avg/rho_d_mean                   'WPL term

        'EC150 Webb et al. (1980) term for carbon dioxide Eq. (24).
        CO2_wpl_LE = MU_WPL*CO2_mg_m3_Avg/rho_d_mean*H2O_Uz_cov
        CO2_wpl_H = (1+(MU_WPL*sigma_wpl))*CO2_mg_m3_Avg/(Tc_Avg+273.15)*Tc_Uz_cov
        Fc_wpl = Fc_irga+CO2_wpl_LE+CO2_wpl_H

        'EC150 Webb et al. (1980) term for water vapor Eq. (25).
        H2O_wpl_LE = MU_WPL*sigma_wpl*LE_irga
        H2O_wpl_H = (1+(MU_WPL*sigma_wpl))*H2O_g_m3_Avg/(Tc_Avg+273.15)*LV*Tc_Uz_cov
        LE_wpl = LE_irga+H2O_wpl_LE+H2O_wpl_H

        RH_hmp_Avg = 100*e_hmp_Avg/e_sat_hmp_Avg
        
        Hs = rho_a_mean*CP*Ts_Uz_cov
        tau = rho_a_mean*tau
        Hc = rho_a_mean*CP*Tc_Uz_cov
      EndIf 
      CallTable(stats30) '****************************************************
      
      inbetween_1hz_scan = TRUE
      If ( just_had_1hz_scan ) Then
        just_had_1hz_scan = FALSE
        inbetween_1hz_scan = FALSE
      EndIf
      
      inbetween_5s_scan = TRUE
      If ( just_had_soil_scan ) Then
        just_had_soil_scan = FALSE
        inbetween_5s_scan = FALSE
      EndIf
    Else
      scan_count = scan_count+1
    EndIf
  NextScan


  '====================== SLOW SCAN INTERVAL =================================
  SlowSequence
  Scan (SLOW_INTV,Sec,SLOW_BUFFER_SIZE,0)
    PanelTemp (panel_tmpr,INTEG)
    Battery (batt_volt)

    '== HMP-155A temp/RH
    VoltDiff (T_hmp,1,mV1000,HMP_T_DIFF,TRUE,0,INTEG,HMP_T_MULT,HMP_T_OFFSET)
    VoltDiff (RH_hmp,1,mV1000,HMP_RH_DIFF,TRUE,0,INTEG,HMP_RH_MULT,HMP_RH_OFFSET)
    VaporPressure (e_hmp,T_hmp,RH_hmp)
    SatVP (e_sat_hmp,T_hmp)

    '== NR-Lite2 net radiometer, expected range 0-15mV
    VoltDiff (Rn_meas,1,mV20,NRLITE_DIFF,TRUE,0,INTEG,nrlite_mult,NRLITE_OFFSET)
    If ( sonic_irga_raw(5)=0 AND hor_wind>5 ) Then    'sonic_irga_raw(5) = CSAT3 diag word
      Rn = Rn_meas*(1+(0.021286*(hor_wind-5)))
    Else
      Rn = Rn_meas
    EndIf
    
    '== LI190SB 
    VoltDiff (PAR_mV,1,mV20,LI190_DIFF,True,0,INTEG,1,0) 'MULT/OFF applied below
    If (PAR_mV > 0) Then
      PAR_flxdens = PAR_mV*li190_dens_mult
      PAR_totflx = PAR_mV*li190_tot_mult
    Else
      PAR_flxdens = NAN
      PAR_totflx = NAN
    EndIf

    #If (NDVIPRI_ENABLED) Then
      SDI12Recorder(dec_ndvi_up1,SDI_COM_ADDR,DEC_NDVI_UP_SDI_ADDR,"M!",1.0,0)
	    SDI12Recorder(dec_ndvi_dn1,SDI_COM_ADDR,DEC_NDVI_DN_SDI_ADDR,"M!",1.0,0)
      SDI12Recorder(dec_pri_up1,SDI_COM_ADDR,DEC_PRI_UP_SDI_ADDR,"M!",1.0,0)
	    SDI12Recorder(dec_pri_dn1,SDI_COM_ADDR,DEC_PRI_DN_SDI_ADDR,"M!",1.0,0)
      CallTable(stats5_ui)
      CallTable(stats30_ui)
    #EndIf

    If (debug_on) Then CallTable debug

    If (save_changes) Then
      save_changes = False 'reset b4 we forget
      save_current_choices()
      CallTable(site_info)
      #If (LGR_N2O_ENABLED OR PIC_CH4_ENABLED OR NDVIPRI_ENABLED) Then
        CallTable(extra_info)
      #EndIf
    EndIf
    
    just_had_1hz_scan = TRUE
  NextScan

  '========================== REPORTING THREAD ===============================
  SlowSequence
  Scan (1,Sec,2,0)
    'HINT: this is the only scan email events should be sent from!
    If (test_email) Then
      test_email = False
      send_test_email()
    EndIf
    If (test_scadabr) Then
      test_scadabr = False
      send_test_ScadaBR()
    EndIf
    If TimeIntoInterval(6,24,hr) Then
      send_daily_email()
    EndIf

    If TimeIntoInterval(0,5,Min) Then
      skipped_10hz_scans = Status.SkippedScan(1,1)
      skipped_1hz_scans = Status.SkippedSlowScan(1,1)
      skipped_5s_scans = Status.SkippedSlowScan(3,1)
      watchdog_errors = Status.WatchdogErrors(1,1)
      send_5min_report()
    EndIf

  NextScan

  '====================== SOIL SCAN INTERVAL =================================
  SlowSequence
  Scan (SOIL_INTV,Sec,SOIL_BUFFER_SIZE,0)

    '== Garmin GPS
    GPS (latitude_a,GPS_COM_ADDR,UTC_OFFSET*3600,0,nmea_sentence(1))
    CallTable(site_daily)

    '== Decagon soil moisture probes
    If (soil_5_enabled) Then
      SDI12Recorder(soil_5TM_ID5_E,SDI_COM_ADDR,DEC_5TM_ID5_SDI_ADDR,"M!",1.0,0)
      If (soil_5TM_ID5_E = NAN) Then 
        soil_5TM_ID5_T = NAN
        soil_5TM_ID5_VWC = NAN
      Else
        soil_5TM_ID5_VWC = Topp_equation(soil_5TM_ID5_E)
      EndIf
    EndIf
    If (soil_6_enabled) Then
      SDI12Recorder(soil_5TM_ID6_E,SDI_COM_ADDR,DEC_5TM_ID6_SDI_ADDR,"M!",1.0,0)
      If (soil_5TM_ID6_E = NAN) Then 
        soil_5TM_ID6_T = NAN
        soil_5TM_ID6_VWC = NAN
      Else
        soil_5TM_ID6_VWC = Topp_equation(soil_5TM_ID6_E)
      EndIf
    EndIf
    If (soil_7_enabled) Then
      SDI12Recorder(soil_5TM_ID7_E,SDI_COM_ADDR,DEC_5TM_ID7_SDI_ADDR,"M!",1.0,0)
      If (soil_5TM_ID7_E = NAN) Then 
        soil_5TM_ID7_T = NAN
        soil_5TM_ID7_VWC = NAN
      Else
        soil_5TM_ID7_VWC = Topp_equation(soil_5TM_ID7_E)
      EndIf
    EndIf
    If (soil_8_enabled) Then
      SDI12Recorder(soil_5TM_ID8_E,SDI_COM_ADDR,DEC_5TM_ID8_SDI_ADDR,"M!",1.0,0)
      If (soil_5TM_ID8_E = NAN) Then 
        soil_5TM_ID8_T = NAN
        soil_5TM_ID8_VWC = NAN
      Else
        soil_5TM_ID8_VWC = Topp_equation(soil_5TM_ID8_E)
      EndIf
    EndIf
    If (soil_9_enabled) Then
      SDI12Recorder(soil_5TM_ID9_E,SDI_COM_ADDR,DEC_5TM_ID9_SDI_ADDR,"M!",1.0,0)
      If (soil_5TM_ID9_E = NAN) Then 
        soil_5TM_ID9_T = NAN
        soil_5TM_ID9_VWC = NAN
      Else
        soil_5TM_ID9_VWC = Topp_equation(soil_5TM_ID9_E)
      EndIf
    EndIf

    #If (SHFP_ENABLED) Then
      VoltDiff(hfp1_mVs,1,mv200,HFP_1_SGNL_DIFF,TRUE,0,INTEG,1,0)    'millivolts
      VoltDiff(hfp2_mVs,1,mv200,HFP_2_SGNL_DIFF,TRUE,0,INTEG,1,0)
      VoltSe(hfp1_Vh,1,mv5000,HFP_1_HEAT_SE,TRUE,0,INTEG,(1/1000),0)
      VoltSe(hfp2_Vh,1,mv5000,HFP_2_HEAT_SE,TRUE,0,INTEG,(1/1000),0) 'volts
      PortSet(9,hfp_sw12_isOn)

      soil_hfp1_heat_flux = hfp1_mVs * soil_hfp1_sensitivity
      soil_hfp2_heat_flux = hfp2_mVs * soil_hfp2_sensitivity
      AvgRun(hfp1_mVs_runavg,1,hfp1_mVs,HFP_CAL_RUNAVG)
      AvgRun(hfp2_mVs_runavg,1,hfp2_mVs,HFP_CAL_RUNAVG)
      AvgRun(hfp1_Vh_runavg,1,hfp1_Vh,HFP_CAL_RUNAVG)
      AvgRun(hfp2_Vh_runavg,1,hfp2_Vh,HFP_CAL_RUNAVG)
      
      If TimeIntoInterval(HFP_CAL_T_START,HFP_CAL_INTERVAL,sec) Then
        hfp_isCalibrating = TRUE
        hfp1_mVs_t0 = hfp1_mVs_runavg
        hfp2_mVs_t0 = hfp2_mVs_runavg
      EndIf
      
      If TimeIntoInterval(HFP_CAL_T_HEATON,HFP_CAL_INTERVAL,sec) Then 
        hfp_sw12_isOn = TRUE
      EndIf
      
      If TimeIntoInterval(HFP_CAL_T_END,HFP_CAL_INTERVAL,sec) Then
        hfp1_mVs_th   = hfp1_mVs_runavg
        hfp1_Vh_th = hfp1_Vh_runavg
        hfp2_mVs_th   = hfp2_mVs_runavg
        hfp2_Vh_th = hfp2_Vh_runavg
      EndIf
      
      If TimeIntoInterval(HFP_CAL_T_HEATOFF,HFP_CAL_INTERVAL,sec) Then
        hfp_sw12_isOn  = FALSE
        soil_hfp1_sensitivity = (hfp1_Vh_th*hfp1_Vh_th*hfp1_selfcal_mult) / ABS(hfp1_mVs_t0 - hfp1_mVs_th) 
        If ( ABS((soil_hfp1_sensitivity / (1000/hfp1_sens)) - 1) >= 0.25 ) Then
          soil_hfp1_sensitivity = 1000/hfp1_sens
        EndIf
        soil_hfp2_sensitivity = (hfp2_Vh_th*hfp2_Vh_th*hfp2_selfcal_mult) / ABS(hfp2_mVs_t0 - hfp2_mVs_th)
        If ( ABS((soil_hfp2_sensitivity / (1000/hfp2_sens)) - 1) >= 0.25 ) Then
          soil_hfp2_sensitivity = 1000/hfp2_sens
        EndIf
      EndIf

      If TimeIntoInterval(HFP_CAL_T_FINISH,HFP_CAL_INTERVAL,sec) Then
        hfp_isCalibrating = FALSE
      EndIf
    #EndIf
    
    just_had_soil_scan = TRUE
  NextScan
EndProg
